PsychoPy2experiment version="3.2.4"
Settings
  Audio lib = pyo
  Data filename = u'data' + os.sep + '%s_%s' % (expInfo['participant'], expInfo['date'])
  Experiment info = {'session': '01', 'participant': ''}
  Full-screen window = True
  Monitor = e330
  Save excel file = True
  Screen = 1
  Units = norm
  Window size (pixels) = [1024, 768]
  color = black
  expName = stroop
  logging level = warning
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Routines
  Routine trial
    TextComponent fovealWord
      color [set every repeat] = $FovCol
      letterHeight = 0.2
      startVal [time (s)] = 0
      stopVal [time (s)] = 2.0
      text [set every repeat] = $FovWord
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    TextComponent parafovealWord
      color [set every repeat] = $ParaCol
      letterHeight = 0.2
      pos [set every repeat] = $ParaPos
      startVal [time (s)] = 0
      stopVal [time (s)] = 2.0
      text [set every repeat] = $ParaWord
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    KeyboardComponent voicekey
      allowedKeys [set every repeat] = '0'
      durationEstim = 2.0
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [time (s)] = 2.0
      store = first key
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    ParallelOutComponent p_port
      address = 0x1000
      startData = $Trigger
      startVal [condition] = len(voicekey.keys) > 0 and frameN <=148
      stopData = 0
      stopVal [duration (frames)] = 2
      syncScreen = True
      syncScreenRefresh = True
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    MicrophoneComponent mic
      channel = 0
      startVal [time (s)] = 0
      stereo = False
      stopVal [duration (s)] = 2.0
      syncScreenRefresh = True
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    CodeComponent stopTrialIfNoResponse
      Code Type = Py
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      Each Frame:
        # if there is no voicekey response, the p_port item will prevent the trial ending unless we tell it to
        if frameN >= 120: # 120 for 2 seconds
            continueRoutine = False
  Routine instruct
    TextComponent instrText
      color = $[1, 1, 1]
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0
      wrapWidth = 2
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      text:
        OK. Ready for the real thing?

        Remember, ignore the word itself;
        just say the name of the colour of the ink

        (Esc will quit)

        Press the spacebar to continue
    KeyboardComponent spaceToStart
      allowedKeys = 'space'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine thanks
    TextComponent thanksText
      color = $[1, 1, 1]
      font = arial
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      wrapWidth = 2
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      text:
        This is the end of the experiment.

        Thanks!
  Routine isi
    StaticComponent ISI
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli-csvfiles\trialTypes10trials.csv
    endPoints = [1, 2]
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('FovWord', 'RED'), ('FovCol', 'RED'), ('ParaWord', 'ROOM'), ('ParaCol', 'white'), ('ParaPos', [-0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 1)]),
      OrderedDict([('FovWord', 'GREEN'), ('FovCol', 'GREEN'), ('ParaWord', 'SHORT'), ('ParaCol', 'white'), ('ParaPos', [-0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 1)]),
      OrderedDict([('FovWord', 'BLUE'), ('FovCol', 'BLUE'), ('ParaWord', 'PUB'), ('ParaCol', 'white'), ('ParaPos', [-0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 1)]),
      OrderedDict([('FovWord', 'YELLOW'), ('FovCol', 'YELLOW'), ('ParaWord', 'WEEKLY'), ('ParaCol', 'white'), ('ParaPos', [-0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 1)]),
      OrderedDict([('FovWord', 'RED'), ('FovCol', 'RED'), ('ParaWord', 'ROOM'), ('ParaCol', 'white'), ('ParaPos', [0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 2)]),
      OrderedDict([('FovWord', 'GREEN'), ('FovCol', 'GREEN'), ('ParaWord', 'SHORT'), ('ParaCol', 'white'), ('ParaPos', [0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 2)]),
      OrderedDict([('FovWord', 'BLUE'), ('FovCol', 'BLUE'), ('ParaWord', 'PUB'), ('ParaCol', 'white'), ('ParaPos', [0.7, 0]), ('Compatibility', 'c'), ('Condition', 'foveal_unified'), ('Trigger', 2)])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
    Routine trial
    Routine isi
  LoopTerminator trials
  Routine thanks
